PsychoPy2experiment version="2020.2.10"
Settings
  Experiment info = {'participant': '001', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 0
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = test
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Routines
  Routine ShowImage
    ImageComponent Image
      image [set every repeat] = $path_stim[idx_values[current_idx]]
      size = (0.7, 0.7)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
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    KeyboardComponent response
      allowedKeys = 'left', 'down', 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
      store = nothing
      syncScreenRefresh = False
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    CodeComponent code
      Code Type = Py
      End Routine:
        thisExp.addData("path", path_stim[idx_values[current_idx]])

        current_idx = current_idx + 1

        if current_idx >= 14:
            exit(0)
  Routine Rest
    TextComponent rest
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = Rest
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  Routine AskToContinue
    TextComponent continuQuestion
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Möchtest du weitermachen?
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    KeyboardComponent stop
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine codeStartup
    CodeComponent codeInit
      Code Type = Py
      Before Experiment:
        import random, xlrd
        import socket

        random.seed()

        in_file = "conditions.xlsx"

        num_items = 14
        num_iter = 5

        path_stim = []
        path_input = []
        path_right = []
        path_wrong1 = []
        path_wrong2 = []
        idx_values = [x for x in range(num_items)]

        current_idx = 0

        TCP_IP = 'localhost'
        TCP_PORT = 50000
        Message = 1
      Begin Experiment:
        #open execl
        inbook = xlrd.open_workbook(in_file)
        insheet = inbook.sheet_by_index(0)

        #loop through rows
        for rowx in range(1, num_items+1):

            row = insheet.row_values(rowx)

            path_stim.append(row[0])
            path_input.append(row[1])
            path_right.append(row[2])
            path_wrong1.append(row[3])
            path_wrong2.append(row[4])

        random.shuffle(idx_values)
  Routine SendSignal
    CodeComponent sender
      Code Type = Py
      End Routine:
        #s = socket.socket(socket.AF_INET, socket.SOCK_STREAM)
        #s.connect((TCP_IP, TCP_PORT))
        #s.send(Message.to_bytes(1, 'big'))
        #Message = Message + 1
        #s.close()
  Routine Input
    TextComponent Question
      letterHeight = 0.05
      pos = ([0, 0.4])
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15.0
      text = What would be the Output, using the following input:
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    KeyboardComponent Response
      allowedKeys = 'left', 'down', 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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    ImageComponent input
      image = $path_input[idx_values[current_idx]]
      pos = (0, 0.3)
      size = (0.5, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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    ImageComponent answer1
      image = $path_right[idx_values[current_idx]]
      pos = (-0.6, -0.1)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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    ImageComponent answer2
      image = $path_wrong1[idx_values[current_idx]]
      pos = ([0,-0.1])
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15.0
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    ImageComponent answer3
      image = $path_wrong2[idx_values[current_idx]]
      pos = ([0.6, -0.1])
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15.0
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  Routine Distraction
Flow
  Routine codeStartup
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 5
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    LoopInitiator Loop loopType="TrialHandler"
      loopType = random
      nReps = 3
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      Routine SendSignal
      Routine ShowImage
      Routine Input
      Routine Distraction
      Routine Rest
    LoopTerminator Loop
    Routine AskToContinue
  LoopTerminator trials
